PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = offline_module
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Routines
  Routine instr
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Willkommen beim Experiment. Dies ist das Offline-Modul, in dem Ihnen ein Wort angezeigt wird. Nachdem das Wort dargestellt wurde, erscheint ein Fixationskreuz. Sobald dieses erscheint müssen Sie sich so lange das Wort vorstellen, bis das Fixationskreuz wieder verschwindet.


        Dieser Ablauf wird dreimal pro Wort, für mehrere Wörter, wiederholt. Wenn Sie diesen Text verstanden haben, drücken Sie die ’Leertaste' um fortzufahren
    KeyboardComponent space_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $word
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    TextComponent before_cross_pause
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    PolygonComponent fix_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [condition] = $before_cross_pause.status == FINISHED
      stopVal [duration (s)] = 1
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    TextComponent text_2
      letterHeight = 0.1
      startVal [condition] = $fix_cross.status == FINISHED
      stopVal [duration (s)] = $random_duration
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    PolygonComponent fix_cross2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [condition] = $text_2.status == FINISHED
      stopVal [duration (s)] = 1
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    TextComponent text_3
      letterHeight = 0.1
      startVal [condition] = $fix_cross2.status == FINISHED
      stopVal [duration (s)] = $random_duration
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    PolygonComponent fix_cross3
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [condition] = $text_3.status == FINISHED
      stopVal [duration (s)] = 1.0
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    TextComponent text_4
      letterHeight = 0.1
      startVal [condition] = $fix_cross3.status == FINISHED
      stopVal [duration (s)] = $random_duration
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    CodeComponent random_duration
      Code Type = Auto->JS
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      Begin Experiment:
        random_duration = 0
      Begin Routine:
        from numpy.random import uniform
        random_duration = round(uniform(1,2),2)
        print(random_duration)
      End Routine:
        thisExp.addData('random_duration', random_duration)
  Routine pause
    TextComponent pause_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Jetzt gibt es 1 minute Pause, wenn Sie keine Pause wollen, drücken Sie die ’Leertaste' um fortzufahren
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    TextComponent text_5
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = $str(round(pauseClock.getTime(),0))
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    KeyboardComponent space_key_1
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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Flow
  Routine instr
  LoopInitiator repeatx3 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    LoopInitiator condition_reps loopType="TrialHandler"
      conditionsFile = conditions.csv
      loopType = fullRandom
      nReps = 5
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      conditions:
        [OrderedDict([('word', 'Schraube')]),
        OrderedDict([('word', 'Platine')]),
        OrderedDict([('word', 'Gehaüse')]),
        OrderedDict([('word', 'Werkbank')]),
        OrderedDict([('word', 'Fließband')]),
        OrderedDict([('word', 'Boden')]),
        OrderedDict([('word', 'Lege')]),
        OrderedDict([('word', 'Halte')]),
        OrderedDict([('word', 'Hebe')])]
      Routine trial
    LoopTerminator condition_reps
    Routine pause
  LoopTerminator repeatx3
